PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [800, 600]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = fixed_dot-16_grid_T1w_test
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine dots
    UnknownComponent dot
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        grid_size = 4  # 4x4 grid
        dot_size = 0.05  # Size of the grey dot
        positions = []  # List of grid positions
        # Calculate grid positions
        for i in range(grid_size):
            for j in range(grid_size):
                x = -0.75 + i * 0.5  # Adjust the range of x coordinates
                y = -0.75 + j * 0.5  # Adjust the range of y coordinates
                positions.append((x, y))
        shuffle(positions)  # Shuffle the positions
      Begin Routine:
        current_position_index = 0  # Start with the first position
      Each Frame:
        # Every 5 seconds, update the dot's position
        if t >= current_position_index * 5:
          dot.pos = positions[current_position_index]  # Update the dot position
          current_position_index += 1  # Move to the next position
        if current_position_index >= len(positions):
          continueRoutine = False  # End the routine when all positions are shown
Flow
