PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data filename = u'../HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/%s_%s_%s_session_%s' %(expName, expInfo['date'],expInfo['trial'],expInfo['session'])
  Experiment info = {'trial': '$trial', 'session': '9999'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save hdf5 file = True
  Screen = 2
  Units = norm
  Window size (pixels) = [800, 600]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 LONG RANGE
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = bht
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine breath_out
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    PolygonComponent polygon1
      fillColor = 1.0000,0.2941, -1.0000
      lineColor = 1.0000, 0.2941, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
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    CodeComponent channel_7
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.BHT_OUT.to_bytes())
  Routine test_block_end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = End of test block
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  Routine test_block_end_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Test block conducted
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  Routine intro
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    TextComponent text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        The breath-holding task will start shortly.
        Please breathe at a comfortable pace.
    KeyboardComponent key_resp
      allowedKeys = 't','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Before Experiment:
        import socket
        from hcphsignals import signals
        from datetime import datetime
        import pwd
        def send_message(message, addr="localhost", port=2023):
            client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            client_socket.connect((addr, port))
            client_socket.sendall(message)
            client_socket.close()
        current_user = pwd.getpwuid(os.geteuid()).pw_name
        folder_path = os.path.dirname('/home/'+current_user +'/workspace/HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/')
        if not os.path.exists(folder_path):
            os.makedirs(folder_path)
        ename = 'bht_'+data.getDateStr(format="%Y-%m-%d")
        trial = 0
        for file in os.listdir(folder_path):
            filename_hour = datetime.strptime(file.split('_')[2],'%Hh%M.%S.%f')
            current_time = datetime.now()

            filename_hour_components = (filename_hour.hour, filename_hour.minute)
            current_time_components = (current_time.hour, current_time.minute)
            hour_difference = abs((current_time_components[0] - filename_hour_components[0]) +
                             (current_time_components[1] - filename_hour_components[1]) / 60.0)

            if ename in file and '.log' in file and hour_difference <1.5:
                trial += 1
  Routine done
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    TextComponent finished
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25.0
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      text:
        Finished!

        Please keep breathing at a comfortable pace
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("stop bh block")
  Routine instructions
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    TextComponent directions
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Breath-holding task

        Breathe in and out through your nose during the whole experiment.

        Please DO NOT FOLLOW THE COLOR CUES IN THE FIRST TRIAL (and only the first trial).

        A message will let you know when to start holding your breath with the red sign.
  Routine test_trial_end
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        End of test trial

        Please engage in the task and HOLD YOUR BREATH during the red colored rectangles.
  Routine hold_test
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    PolygonComponent bh_body
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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    PolygonComponent bh_end
      fillColor = 1.0000, -0.1200, -0.1200
      lineColor = 1.0000, -0.1200, -0.1200
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 2
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    TextComponent end_trial_msg
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5.0
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      text:
        End of test trial

        Please engage in the task and HOLD YOUR BREATH during the red colored rectangles.
    CodeComponent channel_8
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.BHT_HOLD_START_AND_STOP.to_bytes())
      End Routine:
        send_message(signals.BHT_HOLD_START_AND_STOP.to_bytes())
        ioServer.getDevice('tracker').sendMessage("stop mock block")
        ioServer.getDevice('tracker').sendMessage("start bh block")
  Routine hold
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    PolygonComponent bh_body_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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    PolygonComponent bh_end_2
      fillColor = 1.0000, -0.1200, -0.1200
      lineColor = 1.0000, -0.1200, -0.1200
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 2
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    PolygonComponent bh_end_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
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    CodeComponent channel_8_2_
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.BHT_HOLD_START_AND_STOP.to_bytes())
      End Routine:
        send_message(signals.BHT_HOLD_START_AND_STOP.to_bytes())
  Routine start_et
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startEstim = 0
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_channel2
      Code Type = Auto->JS
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      Begin Routine:
        send_message((signals.RUN | signals.ET_START_AND_STOP).to_bytes())
        ioServer.getDevice('tracker').sendMessage("Hello bht")
        ioServer.getDevice('tracker').sendMessage("start mock block")
  Routine stop_et
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    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [condition] = True
      syncScreenRefresh = False
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    CodeComponent channel_2_2
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.ET_START_AND_STOP.to_bytes())

        ioServer.getDevice('tracker').sendMessage("bye bht")
      Each Frame:
        if etRecord_2.status == NOT_STARTED:
            etRecord_2.status = STARTED
  Routine calibration
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  EyetrackerCalibrationRoutine calibration_3
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.075
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  Routine breath_out_2
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  Routine breath_in
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    PolygonComponent polygon_4
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.7
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    CodeComponent channel_4
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.BHT_IN.to_bytes())
  Routine breath_in_last
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    PolygonComponent polygon_6
      fillColor = -0.4000, 0.4539, -0.4000
      lineColor = -0.4000, 0.4539, -0.4000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.7
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    CodeComponent channel_4_2_
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.BHT_IN.to_bytes())
  Routine breath_out_last
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    PolygonComponent polygon_8
      fillColor = 1.0000, 0.1000, -1.0000
      lineColor = 1.0000, 0.1000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
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    CodeComponent channel
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.BHT_OUT.to_bytes())
Flow
  EyetrackerCalibrationRoutine calibration_2
  Routine intro
  Routine instructions
  Routine start_et
  LoopInitiator normal_respiratory_rate loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine breath_in
    Routine breath_out
  LoopTerminator normal_respiratory_rate
  Routine breath_in_last
  Routine breath_out_last
  Routine hold_test
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator normal_respiratory_rate_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine breath_in
      Routine breath_out
    LoopTerminator normal_respiratory_rate_2
    Routine breath_in_last
    Routine breath_out_last
    Routine hold
  LoopTerminator trials
  Routine done
  Routine stop_et
