PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data filename = u'../HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/%s_%s_%s_session_%s' %(expName, expInfo['date'],expInfo['trial'],expInfo['session'])
  Experiment info = {'trial': '$trial', 'session': '9999'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [800, 600]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 LONG RANGE
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = validation
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine dot_center
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    PolygonComponent fixation_out
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation_in
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine dot_BL_2
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  Routine dot_UR
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    PolygonComponent fixation_out_3
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0.5, 0.6]
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.
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    PolygonComponent fixation_in_3
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0.5, 0.6]
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine dot_UL
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    PolygonComponent fixation_in_4
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent fixation_in_5
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [-0.5, 0.6]
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine dot_BR
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    PolygonComponent fixation_out_4
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0.5, -0.6]
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent fixation_in_6
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine dot_CL
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    PolygonComponent fixation_out_5
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.
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    PolygonComponent fixation_in_7
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine dot_CR
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    PolygonComponent fixation_out_6
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.
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    PolygonComponent fixation_in_8
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine dot_CU
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    PolygonComponent fixation_in_9
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent fixation_out_7
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.
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  Routine random_2
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    PolygonComponent fixation_out_8
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation_in_10
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine dot_corners
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    PolygonComponent fixation_out_2
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos,ypos]
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation_in_2
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos,ypos]
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine ET_start
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    CodeComponent channel2_start
      Code Type = Auto->JS
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      Before Experiment:
        import socket
        from hcphsignals import signals
        from datetime import datetime
        import pwd
        def send_message(message, addr="localhost", port=2023):
            client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            client_socket.connect((addr, port))
            client_socket.sendall(message)
            client_socket.close()
        current_user = pwd.getpwuid(os.geteuid()).pw_name
        folder_path = os.path.dirname('/home/'+current_user +'/workspace/HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/')
        if not os.path.exists(folder_path):
            os.makedirs(folder_path)
        ename = 'validation_'+data.getDateStr(format="%Y-%m-%d")

        trial = 0
        for file in os.listdir(folder_path):
            filename_hour = datetime.strptime(file.split('_')[2],'%Hh%M.%S.%f')
            current_time = datetime.now()

            filename_hour_components = (filename_hour.hour, filename_hour.minute)
            current_time_components = (current_time.hour, current_time.minute)
            hour_difference = abs((current_time_components[0] - filename_hour_components[0]) +
                             (current_time_components[1] - filename_hour_components[1]) / 60.0)

            if ename in file and '.log' in file and hour_difference <0.5:
                trial += 1
      Begin Routine:
        send_message(signals.ET_START_AND_STOP.to_bytes())
        ioServer.getDevice('tracker').sendMessage("hello validation")
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine ET_stop
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    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [condition] = True
      syncScreenRefresh = False
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    CodeComponent channel_2_2
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.ET_START_AND_STOP.to_bytes())
        ioServer.getDevice('tracker').sendMessage("bye validation")
      Each Frame:
        if etRecord_2.status == NOT_STARTED:
            etRecord_2.status = STARTED
  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  EyetrackerValidationRoutine validation_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_new
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration_new
  Routine ET_start
  Routine dot_center
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = validation_fourcorners.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('xpos', 0.4), ('ypos', 0.4)]),
      OrderedDict([('xpos', 0.4), ('ypos', -0.4)]),
      OrderedDict([('xpos', -0.4), ('ypos', -0.4)]),
      OrderedDict([('xpos', -0.4), ('ypos', 0.4)])]
    Routine dot_corners
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = validation_random.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('xpos', 0.0), ('ypos', 0.4)]),
      OrderedDict([('xpos', 0.4), ('ypos', 0.0)]),
      OrderedDict([('xpos', 0.0), ('ypos', -0.4)]),
      OrderedDict([('xpos', -0.4), ('ypos', 0.0)])]
    Routine random_2
  LoopTerminator trials
  Routine dot_center
  Routine ET_stop
