PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [800, 600]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = fixation_dots_T1weighted
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine dots
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    PolygonComponent dot_1
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1, -0.2, -0.2
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent dot_2
      fillColor = -1.0000, 0.2706, -0.9843
      lineColor [set every repeat] = 0,1,0
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.1
      stopVal [time (s)] = 0.2
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    PolygonComponent dot_3
      fillColor = 1.0000, 0.0745, -0.4667
      lineColor = 1,0,1
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 0.3
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    PolygonComponent dot_4
      fillColor = -1,1,1
      lineColor = -1,1,1
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.3
      stopVal [time (s)] = 0.4
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    PolygonComponent dot_5
      fillColor = 0.4510, 0.4275, 0.4353
      lineColor = 1,1,1
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.4
      stopVal [time (s)] = 0.5
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    PolygonComponent dot_6
      fillColor = 1.0000, 0.7647, -0.6235
      lineColor = 1,1,0.5
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 0.6
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    PolygonComponent dot_7
      fillColor = 0.2235, -1.0000, 1.0000
      lineColor = -0.15, -0.1, 1
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 0.7
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    PolygonComponent dot_8
      fillColor = 0.3412, -0.1294, -0.5059
      lineColor = 0.5, 0.2, 0.2
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.7
      stopVal [time (s)] = 0.8
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    PolygonComponent dot_9
      fillColor = -0.4118, 0.5765, 0.8353
      lineColor = 0.5, 1, 1
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.8
      stopVal [time (s)] = 0.9
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    PolygonComponent dot_10
      fillColor = 0,0,0
      lineColor = 0,0,0
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.9
      stopVal [time (s)] = 1.0
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  Routine start_ET
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = True
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  Routine end
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    TextComponent text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text = End press 't'
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    EyetrackerRecordComponent ET_stop
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      stopWithRoutine = False
      syncScreenRefresh = True
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    KeyboardComponent key_resp_3
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail
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    TextComponent waiting_trigger
      letterHeight = 0.12
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = The program is ready for the scanner trigger. Press 's' to proceed manually.
      wrapWidth = 1.7
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    KeyboardComponent key_resp
      allowedKeys = ['s']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fix_desc
      letterHeight = 0.12
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        In this task you will see a grating patterns on the screen.
        Please keep your eyes on the fixation circle like the one below.
  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = -1, -1, -1
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.07
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.15
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration_2
  Routine trail
  Routine start_ET
  LoopInitiator T1w_LIBRE loopType="TrialHandler"
    loopType = random
    nReps = 720
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    Routine dots
  LoopTerminator T1w_LIBRE
  Routine end
